PsychoPy2experiment version="2023.2.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = $[-1, -1, -1]
  expName = corsi_blocks
  keyboardBackend = ioHub
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Routines
  Routine instructions
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the corsi task!

        This task will start with 3 lit squares and if the trial is correct, the number of of lit squares will increase.

        Press any key or click anywhere to start.
    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine ISI
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    TextComponent blank
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      text = +
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    CodeComponent setLocations
      Code Type = Auto->JS
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      Begin Experiment:
        # start with 3 coloured blocks
        nBlocks = 3
      Begin Routine:
        # create 9 blocks that shows sequence
        blocks = [blk1_3, blk2_3, blk3_3, blk4_3, blk5_3, blk6_3, blk7_3, blk8_3, blk9_3]

        # create 9 response blocks
        respond_blocks = [blk1, blk2, blk3, blk4, blk5, blk6, blk7, blk8, blk9]

        # set the required number of blocks to visible
        block_order = []
        correct_order = []
        respond_block_order = []
        for block in range(nBlocks):
            blocks[block].setColor('white')
            respond_blocks[block].setColor('white')
            # responses will be saved as string so we need the correct answer to be in string format
            correct_order.append(respond_blocks[block].name)
            # populate list with coloured block sequence
            block_order.append(blocks[block])
            respond_block_order.append(respond_blocks[block])
        print("block_order", block_order)
        print("correct_order", correct_order)
        print("respond_block_order", respond_block_order)

        # set the position of blocks to be random
        # preset some random locations so that the boxes never overlap
        xys = [[0.25625, 0.0975], [0.0675, 0.07375], [-0.09875, 0.065], [-0.26625, 0.235], [0.22, 0.2425], [0.16625, 0.3825], [-0.18625, 0.41125], [-0.01875, 0.235], [-0.3575, -0.05625], [-0.12125, -0.12625], [0.05875, -0.0575], [0.19375, -0.17125], [0.30125, -0.0175], [0.4125, -0.1325], [0.365, -0.27625], [-0.01125, -0.295], [-0.285, -0.27125], [-0.4075, 0.11875], [-0.485, 0.34625], [0.4625, 0.35875], [0.45375, 0.175], [0.54, 0.03625], [0.62875, -0.1825], [0.57875, -0.31375], [-0.45875, -0.3], [-0.55125, -0.13375], [-0.6025, 0.0725], [-0.675, 0.29875], [-0.68625, -0.225], [0.03125, -0.41], [0.1925, -0.295], [-0.16125, -0.28], [-0.24625, 0.04375], [-0.0225, 0.395], [0.28875, 0.39875], [0.6375, 0.27375], [-0.35125, 0.36625]]

        # randomise the coordinates
        shuffle(xys)
        count = 0 # used to iterate through list
        positions = []
        for block in blocks:
            # keep the same block positions
            block.setPos([xys[count][0], xys[count][1]])
            respond_blocks[count].setPos([xys[count][0], xys[count][1]])

            positions.append(xys[count])

            count += 1

        # save positions used to csv output
        thisExp.addData('positions', positions)
  Routine corsi_present
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    CodeComponent setColor
      Code Type = Both
      Begin JS Routine:
        block_order[block_sequence.thisN].fillColor = new util.Color([1, 0, 0])
        console.log(block_order[block_sequence.thisN].pos);
        console.log(block_order[block_sequence.thisN].opacity);
      Begin Routine:
        # set the block to red
        block_order[block_sequence.thisN].fillColor = [1, 0, 0]
        print(block_order[block_sequence.thisN].pos)
        print(block_order[block_sequence.thisN].opacity)
      End JS Routine:
        block_order[block_sequence.thisN].fillColor = new util.Color([1, 1, 1])
      End Routine:
        # reset the block colour
        block_order[block_sequence.thisN].fillColor = [1, 1, 1]
    PolygonComponent blk1_3
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = height
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    PolygonComponent blk2_3
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = height
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    PolygonComponent blk3_3
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = height
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    PolygonComponent blk4_3
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = height
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    PolygonComponent blk5_3
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = height
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    PolygonComponent blk6_3
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = height
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    PolygonComponent blk7_3
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = height
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    PolygonComponent blk8_3
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = height
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    PolygonComponent blk9_3
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = height
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  Routine corsi_respond
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    PolygonComponent blk1
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent blk2
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent blk3
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent blk4
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent blk5
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent blk6
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent blk7
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent blk8
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent blk9
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    MouseComponent corsi_mouse
      clickable = blk1, blk2, blk3, blk4, blk5, blk6, blk7, blk8, blk9
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent check_correct
      Code Type = Auto->JS
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      Begin Routine:
        # list to keep track which blocks was clicked
        order_clicked = []

        # attribute to show the Submit button
        show = False
      Each Frame:
        for block in respond_blocks:
            if corsi_mouse.isPressedIn(block):
                # change clicked block to red
                block.fillColor = [1, 0, 0]
                # prevent list from being populated repeatedly with same block while mouse is being held
                if block.name not in order_clicked:
                    order_clicked.append(block.name)

        # show submit button if amount of blocks clicked is the same as sequence number
        if len(corsi_mouse.clicked_name)==nBlocks:
            show = True

        if corsi_mouse.isPressedIn(submit_button):
            continueRoutine = False
      End Routine:
        # create a variable to store accuracy
        correct = 0
        print('order_clicked', order_clicked)
        print('correct_order', correct_order)

        # create a list to store accuracy
        correct_list = []
        count = 0
        for name in order_clicked:
            if name == correct_order[count]:
                correct_list.append(1) # add value of 1 if block clicked matches the correct order
            else:
                correct_list.append(0) # add 0 if no match
            count += 1
        print(correct_list)
        # e.g. list - [1,1,1] for 3 sequences block

        # save list to csv output
        thisExp.addData('correct_list', correct_list)

        # if the sum of list is equals to number of sequence, the trial is correct
        if sum(correct_list) == len(correct_list):
            correct = 1

        # save correct variable to csv output
        thisExp.addData('corsi_correct', correct)

        # increase number of blocks if they get it correct
        if correct:
            nBlocks += 1


        # cap the number of blocks at the max number
        if nBlocks > len(blocks):
            nBlocks = len(blocks)
    TextboxComponent submit_button
      bold = False
      editable = False
      fillColor = darkgrey
      letterHeight = 0.05
      pos = (0.5, -0.4)
      size = (0.2, 0.1)
      startVal [condition] = show
      text = Submit
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  Routine feedback
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    CodeComponent fbcode
      Code Type = Auto->JS
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      Begin Routine:
        # if the sequence clicked was correct
        if correct:
            thisfb = 'Correct!'
            fbcol = 'green'
        else: # if the sequence clicked was wrong
            thisfb = 'Incorrect!'
            fbcol = 'red'
    TextComponent fbtxt
      color [set every repeat] = $fbcol
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $thisfb
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    CodeComponent reset_col_code
      Code Type = Both
      Begin JS Routine:
        for (var block, _pj_c = 0, _pj_a = respond_blocks, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            block = _pj_a[_pj_c];
            block.fillColor = new util.Color([1 ,1, 1])
        }

        for (var block, _pj_c = 0, _pj_a = blocks, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            block = _pj_a[_pj_c];
            block.fillColor = new util.Color([1 ,1, 1])
        }
      Begin Routine:
        # reset the colour of all blocks in prep for next trial
        for block in respond_blocks:
            block.fillColor = [1 ,1, 1]

        for block in blocks:
            block.fillColor = [1 ,1, 1]
    CodeComponent end_task
      Code Type = Auto->JS
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      Begin Experiment:
        incorrect_count = 0
      End Routine:
        if not correct:
            incorrect_count += 1

        if incorrect_count > 3:
            corsi_task.finished = True
  Routine end
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $'Your maximum blocks remembered was: ' + str(nBlocks-1)
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Flow
  Routine instructions
  LoopInitiator corsi_task loopType="TrialHandler"
    loopType = random
    nReps = 1000
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    Routine ISI
    LoopInitiator block_sequence loopType="TrialHandler"
      loopType = random
      nReps = nBlocks
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      Routine corsi_present
    LoopTerminator block_sequence
    Routine corsi_respond
    Routine feedback
  LoopTerminator corsi_task
  Routine end
