PsychoPy2experiment version="2023.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = Digit Span Task
  keyboardBackend = ioHub
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Routines
  Routine Instructions
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    TextComponent instr_bwd
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Digit Span Backward test

        In this test, some number sequences will appear on your screen. What you are asked to do is to remember the number sequences and write them in "reverse order". For example, when 1-2-3 appears on the screen, you are asked to write 3-2-1 on the memory screen.

        The test will start with 3-digit sequences (such as 1-2-3). If you remember the 3-digit strings correctly, the string will be extended by one digit (like 1-2-3-4). If you make three mistakes in a row, the test will end.

        Use the number keys on your keyboard to type your answer. If you make a mistake, you can correct your mistake with the BACKSPACE button. After entering the numbers, press ENTER to submit your response. You will receive feedback after each answer.

        Do not leave spaces between numbers when entering them. Do not enter any characters (+, -, etc.) other than numbers.

        If you understand the explanations, press the SPACE key when you are ready to start the experiment.
    KeyboardComponent start_bwd
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Presentation
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    TextComponent fixation
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    TextComponent pres_text
      letterHeight = 0.1
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1
      text [set every repeat] = $str(digits)[digitLoop.thisN]
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  Routine Recall
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    TextComponent recall_txt
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0
      text = Write the numbers in reverse order
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.1
      size = (None, None)
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        # Store responses
        allResponses = []
      End Routine:
        if textbox.text == str(response):
            correct = 1
            fbTxt = 'Correct!'
        else:
            correct = 0
            fbTxt = 'Incorrect'
        thisExp.addData('correct', correct)

        # Store each response in list
        allResponses.append(correct)
    CodeComponent JScode
      Code Type = JS
      Begin JS Routine:
        // this is a temporary fix to allow editable textbox to be used on several trials
        textbox.refresh()
    KeyboardComponent key_resp
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Feedback
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    TextComponent feedback_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $fbTxt
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    CodeComponent feedback_code
      Code Type = Auto->JS
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      End Routine:
        # for incorrect, check that two responses exist
        # and that their sum of last two responses is zero
        if len(allResponses) >= 3 and sum(allResponses[-3:]) == 0:
            trials.finished = True
            blocks.finished = True
        # If sum of last two responses is 2, move to next sequence
        elif sum(allResponses[-2:]) == 2:
            trials.finished = True
            allResponses = []
  Routine End
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    TextComponent thank_you
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        The backward number sequence test is over.
        The next number sequence will start soon.
        Please wait...
  Routine Instructions_Forward
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    TextComponent instr_fwd
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Digit Span Forward test

        In this test, some number sequences will appear on your screen. What you are asked to do is to remember the number sequences and write them "in the same order". For example, when 1-2-3 appears on the screen, you are asked to write 1-2-3 on the memory screen.

        The test will start with 3-digit sequences (such as 1-2-3). If you remember the 3-digit strings correctly, the string will be extended by one digit (like 1-2-3-4). If you make three mistakes in a row, the test will end.

        Use the number keys on your keyboard to type your answer. If you make a mistake, you can correct your mistake with the BACKSPACE button. After entering the numbers, press ENTER to submit your response. You will receive feedback after each answer.

        Do not leave spaces between numbers when entering them. Do not enter any characters (+, -, etc.) other than numbers.

        If you understand the explanations, press the SPACE key when you are ready to start the experiment.
    KeyboardComponent start_fwd
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Presentation_Forward
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    TextComponent fixation_fwd
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    TextComponent pres_text_fwd
      letterHeight = 0.1
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1
      text [set every repeat] = $str(digits_fwd)[digitLoop_fwd.thisN]
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  Routine Recall_Forward
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    TextComponent recall_txt_fwd
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0
      text = Write the numbers in the same order
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    TextboxComponent textbox_fwd
      bold = False
      editable = True
      letterHeight = 0.1
      size = (None, None)
      startVal [time (s)] = 0.0
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    CodeComponent code_fwd
      Code Type = Auto->JS
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      Begin Experiment:
        # Store responses
        allResponsesfwd = []
      End Routine:
        if textbox_fwd.text == str(digits_fwd):
            correct = 1
            fbTxtFwd = 'Correct!'
        else:
            correct = 0
            fbTxtFwd = 'Incorrect'
        thisExp.addData('correct', correct)

        # Store each response in list
        allResponsesfwd.append(correct)
    CodeComponent JScode_fwd
      Code Type = JS
      Begin JS Routine:
        // this is a temporary fix to allow editable textbox to be used on several trials
        textbox.refresh()
    KeyboardComponent key_resp_fwd
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Feedback_Forward
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    TextComponent feedback_text_fwd
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $fbTxtFwd
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    CodeComponent feedback_code_fwd
      Code Type = Auto->JS
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      End Routine:
        # for incorrect, check that two responses exist
        # and that their sum of last two responses is zero
        if len(allResponsesfwd) >= 3 and sum(allResponsesfwd[-3:]) == 0:
            trials_fwd.finished = True
            blocks_fwd.finished = True
        # If sum of last two responses is 2, move to next sequence
        elif sum(allResponsesfwd[-2:]) == 2:
            trials_fwd.finished = True
            allResponsesfwd = []
  Routine End_Fwd
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    TextComponent thank_you_fwd
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        The study has ended.
        Thanks for your participation.
  Routine hello
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    TextComponent text_hello
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Welcome to memory tests.

        These tests require undivided attention. Make sure the room you are in is quiet and your phone is off or on silent.

        PLEASE DO NOT START THE TESTS BEFORE READING THE DESCRIPTIONS.

        There are two consecutive tests in this study. The description of each test will appear on the screen before the test starts.

        Please try to answer as quickly and accurately as possible in both tests.

        DO NOT USE PEN AND PAPER DURING TESTS.
        JUST KEEP THE NUMBERS IN MIND!

        Press SPACE when you're ready to continue.
    KeyboardComponent key_resp_hello
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine goodbye
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    TextComponent text_goodbye
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
        The study has ended.
        Thanks for your participation.
Flow
  Routine hello
  Routine Instructions
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = choose_digitSpan.xlsx
    isTrials = False
    loopType = sequential
    nReps = 5
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    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $condition_file
      loopType = sequential
      nReps = 1
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      LoopInitiator digitLoop loopType="TrialHandler"
        isTrials = False
        loopType = sequential
        nReps = digitSpan
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        Routine Presentation
      LoopTerminator digitLoop
      Routine Recall
      Routine Feedback
    LoopTerminator trials
  LoopTerminator blocks
  Routine End
  Routine Instructions_Forward
  LoopInitiator blocks_fwd loopType="TrialHandler"
    conditionsFile = choose_digitSpan_fwd.xlsx
    isTrials = False
    loopType = sequential
    nReps = 5
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    conditions:
      [{'condition_file_fwd': 'three_fwd.xlsx'},
      {'condition_file_fwd': 'four_fwd.xlsx'},
      {'condition_file_fwd': 'five_fwd.xlsx'},
      {'condition_file_fwd': 'six_fwd.xlsx'},
      {'condition_file_fwd': 'seven_fwd.xlsx'},
      {'condition_file_fwd': 'eight_fwd.xlsx'},
      {'condition_file_fwd': 'nine_fwd.xlsx'},
      {'condition_file_fwd': 'ten_fwd.xlsx'},
      {'condition_file_fwd': 'eleven_fwd.xlsx'},
      {'condition_file_fwd': 'twelve_fwd.xlsx'}]
    LoopInitiator trials_fwd loopType="TrialHandler"
      conditionsFile = $condition_file_fwd
      loopType = sequential
      nReps = 1
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      LoopInitiator digitLoop_fwd loopType="TrialHandler"
        isTrials = False
        loopType = sequential
        nReps = digitSpan_fwd
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        Routine Presentation_Forward
      LoopTerminator digitLoop_fwd
      Routine Recall_Forward
      Routine Feedback_Forward
    LoopTerminator trials_fwd
  LoopTerminator blocks_fwd
  Routine End_Fwd
