PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = $[-1, -1, -1]
  expName = glasgow_face_matching
  keyboardBackend = ioHub
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Routines
  Routine Instructions
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    ImageComponent background
      image = background.jpg
      size = (2 , 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent startKey
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextboxComponent instructionstxt
      bold = False
      borderColor = black
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.05
      opacity = 0.8
      padding = 0.022
      size = (1.24, 0.77)
      startVal [time (s)] = 0.0
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      text:
        On each trial, you will see a pair of faces. Your task is to use the response keys to indicate whether the images are of the same or different individuals.

        Respond with with the left arrow key if the faces are the same
        Respond with the right arrow key if the faces are different

        You are free to view the faces for as long as needed.

        Press any key to continue to the main task.
  Routine trial
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    ImageComponent background_2
      image = background.jpg
      size = (2, 1)
      startVal [time (s)] = 0.0
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    ImageComponent faces
      flipHoriz = True
      image [set every repeat] = $imageFile
      size = (1.24, 0.77)
      startVal [time (s)] = 0.0
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    KeyboardComponent resp
      allowedKeys = 'left','right'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextboxComponent trial_counter
      bold = False
      borderColor = black
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.05
      opacity = 0.8
      pos = (0, -0.425)
      size = (0.23, 0.07)
      startVal [time (s)] = 0.0
      text [set every repeat] = $str(trials.thisN+1) +'/' + str(trials.nTotal)
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    TextboxComponent reminder
      bold = False
      borderColor = black
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.05
      opacity = 0.8
      pos = (0, 0.425)
      size = (0.84, 0.07)
      startVal [time (s)] = 0.0
      text = Left = Same        Right = Different
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  Routine feedback
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    ImageComponent background_3
      image = background.jpg
      size = (2, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        correct_counter = 0
      Begin Routine:
        if resp.corr:
            fbtxt = 'Correct!'
            fbcol = 'green'
            correct_counter += 1
        else:
            fbtxt = 'Incorrect'
            fbcol = 'red'
    TextboxComponent textbox
      bold = False
      borderColor = black
      color [set every repeat] = $fbcol
      editable = False
      fillColor = white
      letterHeight = 0.05
      opacity = 0.8
      size = (1.24, 0.77)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $fbtxt
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    TextboxComponent reminder_2
      bold = False
      borderColor = black
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.05
      opacity = 0.8
      pos = (0, 0.426)
      size = (0.84, 0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = Left = Same        Right = Different
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    TextboxComponent trial_counter_2
      bold = False
      borderColor = black
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.05
      opacity = 0.8
      pos = (0, -0.426)
      size = (0.23, 0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $str(trials.thisN+1) +'/' + str(trials.nTotal)
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  Routine thanks
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    ImageComponent background_4
      image = background.jpg
      size = (2, 1)
      startVal [time (s)] = 0.0
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    TextboxComponent endmsg
      bold = False
      borderColor = black
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.05
      opacity = 0.8
      size = (1.24, 0.77)
      startVal [time (s)] = 0.0
      text [set every repeat] = $'You scored ' + str(correct_counter) +'/' + str(trials.nTotal) + ' correct!'
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Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions_short.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'imageFile': 'same/136_C2_DV.jpg', 'corrAns': 'left', 'sameOrDiff': 'same'},
      {'imageFile': 'same/139_DV_C2.jpg', 'corrAns': 'left', 'sameOrDiff': 'same'},
      {'imageFile': 'same/168_C2_DV.jpg', 'corrAns': 'left', 'sameOrDiff': 'same'},
      {'imageFile': 'same/170_DV_C2.jpg', 'corrAns': 'left', 'sameOrDiff': 'same'},
      {'imageFile': 'same/235_C2_DV.jpg', 'corrAns': 'left', 'sameOrDiff': 'same'},
      {'imageFile': 'same/303_DV_C2.jpg', 'corrAns': 'left', 'sameOrDiff': 'same'},
      {'imageFile': 'different/013_235_R.jpg', 'corrAns': 'right', 'sameOrDiff': 'different'},
      {'imageFile': 'different/019_074_L.jpg', 'corrAns': 'right', 'sameOrDiff': 'different'},
      {'imageFile': 'different/025_235_L.jpg', 'corrAns': 'right', 'sameOrDiff': 'different'},
      {'imageFile': 'different/049_218_L.jpg', 'corrAns': 'right', 'sameOrDiff': 'different'},
      {'imageFile': 'different/076_109_R.jpg', 'corrAns': 'right', 'sameOrDiff': 'different'},
      {'imageFile': 'different/077_133_R.jpg', 'corrAns': 'right', 'sameOrDiff': 'different'}]
    Routine trial
    Routine feedback
  LoopTerminator trials
  Routine thanks
