PsychoPy2experiment version="2023.2.2"
Settings
  Audio lib = ptb
  Experiment info = {'session': '001', 'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1440, 900]
  color = $[-1,-1,-1]
  expName = GFMT_short
  keyboardBackend = ioHub
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Routines
  Routine trial
    ImageComponent background_2
      image = background.jpg
      size = (1.55, 1)
      startVal [time (s)] = 0.0
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
    ImageComponent faces
      image [set every repeat] = $imageFile
      startVal [time (s)] = 0.0
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    KeyboardComponent resp
      allowedKeys = 'left','right'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextboxComponent trial_counter
      bold = False
      borderColor = black
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.05
      opacity = 0.8
      pos = (0, -0.4)
      size = (0.3, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $str(trials.thisN+1) +'/' + str(trials.nTotal)
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  Routine Instructions
    ImageComponent background
      image = background.jpg
      size = (1.55, 1)
      startVal [time (s)] = 0.0
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
    KeyboardComponent startKey
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextboxComponent instructionstxt
      bold = False
      borderColor = black
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.05
      opacity = 0.8
      size = (1, 0.8)
      startVal [time (s)] = 0.0
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      text:
        On each trial, you will see a pair of faces. Your task is to use the response keys to indicate whether the images are of the same or different individuals.

        Respond with with the left arrow key if the faces are the same
        Respond with the right arrow key if the faces are different

        You are free to view the faces for as long as needed.

        Press any key to continue to the main task.
  Routine thanks
    ImageComponent background_4
      image = background.jpg
      size = (1.55, 1)
      startVal [time (s)] = 0.0
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
    TextboxComponent endmsg
      bold = False
      borderColor = black
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.05
      opacity = 0.8
      size = (1, 0.8)
      startVal [time (s)] = 0.0
      text [set every repeat] = $'You scored ' + str(correct_counter) +'/' + str(trials.nTotal) + ' correct!'
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  Routine feedback
    ImageComponent background_3
      image = background.jpg
      size = (1.55, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        correct_counter = 0
      Begin Routine:
        if resp.corr:
            fbtxt = 'Correct!'
            fbcol = 'green'
            correct_counter += 1
        else:
            fbtxt = 'Incorrect'
            fbcol = 'red'
    TextboxComponent textbox
      bold = False
      color [set every repeat] = $fbcol
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $fbtxt
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Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'imageFile': 'same/020_C2_DV.jpg', 'corrAns': 'left', 'sameOrDiff': 'same'},
      {'imageFile': 'same/025_C2_DV.jpg', 'corrAns': 'left', 'sameOrDiff': 'same'},
      {'imageFile': 'same/068_C2_DV.jpg', 'corrAns': 'left', 'sameOrDiff': 'same'},
      {'imageFile': 'same/069_C2_DV.jpg', 'corrAns': 'left', 'sameOrDiff': 'same'},
      {'imageFile': 'same/074_C2_DV.jpg', 'corrAns': 'left', 'sameOrDiff': 'same'},
      {'imageFile': 'same/075_DV_C2.jpg', 'corrAns': 'left', 'sameOrDiff': 'same'},
      {'imageFile': 'same/081_C2_DV.jpg', 'corrAns': 'left', 'sameOrDiff': 'same'},
      {'imageFile': 'same/085_C2_DV.jpg', 'corrAns': 'left', 'sameOrDiff': 'same'},
      {'imageFile': 'same/092_C2_DV.jpg', 'corrAns': 'left', 'sameOrDiff': 'same'},
      {'imageFile': 'same/102_C2_DV.jpg', 'corrAns': 'left', 'sameOrDiff': 'same'},
      {'imageFile': 'same/108_DV_C2.jpg', 'corrAns': 'left', 'sameOrDiff': 'same'},
      {'imageFile': 'same/115_C2_DV.jpg', 'corrAns': 'left', 'sameOrDiff': 'same'},
      {'imageFile': 'same/120_DV_C2.jpg', 'corrAns': 'left', 'sameOrDiff': 'same'},
      {'imageFile': 'same/129_C2_DV.jpg', 'corrAns': 'left', 'sameOrDiff': 'same'},
      {'imageFile': 'same/136_C2_DV.jpg', 'corrAns': 'left', 'sameOrDiff': 'same'},
      {'imageFile': 'same/139_DV_C2.jpg', 'corrAns': 'left', 'sameOrDiff': 'same'},
      {'imageFile': 'same/168_C2_DV.jpg', 'corrAns': 'left', 'sameOrDiff': 'same'},
      {'imageFile': 'same/170_DV_C2.jpg', 'corrAns': 'left', 'sameOrDiff': 'same'},
      {'imageFile': 'same/235_C2_DV.jpg', 'corrAns': 'left', 'sameOrDiff': 'same'}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
    Routine trial
    Routine feedback
  LoopTerminator trials
  Routine thanks
