PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Español Digit Span Task
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Routines
  Routine trial
  Routine Instructions
    TextComponent Instrucciones
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Para esta tarea, necesitaras recordar la lista de números presentados en secuencia.

        Primero iniciaras con una lista de 3 números y luego se ira incrementando progresivamente.

        Por favor brinda tu respuesta, cuando en la pantalla aparezca la palabra "Recordar", coloca los números usando tu teclado.

        Si cometes errores, puedes usar la tecla "borrar" para corregirlo. No utilices espacios en blanco (barra espaciadora).
    ImageComponent cont_boton_2
      image = continuar.png
      pos = (0, -.4)
      size = (0.3, 0.07)
      startVal [time (s)] = 0.0
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    MouseComponent start_mouse
      clickable = cont_button
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine Presentation
    TextComponent fixation
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent pres_text
      letterHeight = 0.1
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1
      text [set every repeat] = $str(digits)[digitLoop.thisN]
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  Routine Recall
    TextComponent recall_txt
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0
      text = Recordar
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.1
      size = (None, None)
      startVal [time (s)] = 0.0
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    ImageComponent cont_button
      image = continuar.png
      pos = (0, -.4)
      size = (0.3, 0.07)
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      End Routine:
        if textbox.text == str(digits):
            correct = 1
            fbTxt = '¡Correcto!'
        else:
            correct = 0
            fbTxt = 'Incorrecto'
        thisExp.addData('correct', correct)
    MouseComponent mouse
      clickable = cont_button
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    CodeComponent JScode
      Code Type = JS
      Begin JS Routine:
        // this is a temporary fix to allow editable textbox to be used on several trials
        textbox.refresh()
  Routine Feedback
    TextComponent Texto_Retroalimentación
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $fbTxt
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  Routine End
    TextComponent Gracias
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        Este es el final del eperimento.
        Muchas gracias por su tiempo.
Flow
  Routine Instructions
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = choose_digitSpan.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'condition_file': 'three.xlsx'},
      {'condition_file': 'four.xlsx'},
      {'condition_file': 'five.xlsx'},
      {'condition_file': 'six.xlsx'},
      {'condition_file': 'seven.xlsx'}]
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $condition_file
      loopType = sequential
      nReps = 1
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      LoopInitiator digitLoop loopType="TrialHandler"
        isTrials = False
        loopType = sequential
        nReps = digitSpan
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        Routine Presentation
      LoopTerminator digitLoop
      Routine Recall
      Routine Feedback
    LoopTerminator trials
  LoopTerminator blocks
  Routine End
