PsychoPy2experiment version="2020.2.4"
Settings
  Audio lib = pyo
  Completed URL = $"https://wvu.sona-systems.com/webstudy_credit.aspx?experiment_id=626&credit_token=8ef8ac89bde24d55bbed2ae6f007771a&survey_code=${e://Field/id}"+expInfo['participant']
  Experiment info = {'participant': '', 'age': '', 'gender': '', 'years of education': ''}
  Full-screen window = False
  Monitor = testMonitor
  Resources = ['C:\\Users\\mashu\\Documents\\STUDIES\\bandit\\Pavlovia\\rljs\\rljs\\auditory_stim\\coin1.mp3', 'C:\\Users\\mashu\\Documents\\STUDIES\\bandit\\Pavlovia\\rljs\\rljs\\auditory_stim\\coin2.mp3', 'C:\\Users\\mashu\\Documents\\STUDIES\\bandit\\Pavlovia\\rljs\\rljs\\auditory_stim\\coin3.mp3', 'C:\\Users\\mashu\\Documents\\STUDIES\\bandit\\Pavlovia\\rljs\\rljs\\auditory_stim\\coin4.mp3', 'C:\\Users\\mashu\\Documents\\STUDIES\\bandit\\Pavlovia\\rljs\\rljs\\auditory_stim\\coin5.mp3', 'C:\\Users\\mashu\\Documents\\STUDIES\\bandit\\Pavlovia\\rljs\\rljs\\auditory_stim\\silence_short.mp3', 'C:\\Users\\mashu\\Documents\\STUDIES\\bandit\\Pavlovia\\rljs\\rljs\\images\\Rewardnull.png', 'images\\Reward1.png', 'images\\Reward2.png', 'images\\Reward3.png', 'images\\Reward4.png', 'images\\Reward5.png', 'cued.csv', 'uncued.csv', 'conditions.xlsx', 'auditory_stim\\coin1.wav', 'auditory_stim\\coin2.wav', 'auditory_stim\\coin3.wav', 'auditory_stim\\coin4.wav', 'auditory_stim\\coin5.wav', 'auditory_stim\\silence.wav', 'auditory_stim\\silence_short.wav', 'images\\blue_box.png', 'images\\gold_box.png', 'images\\green_box.png', 'images\\purple_box.png', 'images\\red_box.png']
  Screen = 1
  Show mouse = True
  Units = height
  Use version = 2020.2.10
  Window size (pixels) = [1280, 720]
  expName = rl
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Routines
  Routine Instructions
    TextComponent instructions
      letterHeight = 0.03
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment!

        In each trial you will be asked to choose between green and blue options by licking the mouse on the option you prefer. Each choice can result in either winning the number of points written on the chosen box or winning nothing. The odds of winning associated with green vs. blue will change throughout the experiment. You won't know what they are but can guess based on the feedback you get after each choice.

        The red bar on the bottom left will move to the right as you earn points. Additional 2 dollars will be added to your payment if you reach the purple mark, and additional 5 will be added if you reach the yellow mark.
        Please press the SPACE bar to continue.
    KeyboardComponent key_resp
      allowedKeys = 'space',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent green_example
      image = images/green_box.png
      pos = (-0.2, -0.20)
      size = (0.15, 0.20)
      startVal [time (s)] = 0.0
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    ImageComponent blue_example
      image = images/blue_box.png
      pos = (0.2, -0.2)
      size = (0.15, 0.20)
      startVal [time (s)] = 0.0
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    TextComponent question
      color = $[0.686,-0.875,-0.875]
      letterHeight = 0.03
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = ?
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    ImageComponent pointbar
      image = images/red_box.png
      pos = (-300, -300)
      size = (10, 20)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent purplebar
      image = images/purple_box.png
      pos = (300, -300)
      size = (10, 20)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent goldbar
      image = images/gold_box.png
      pos = (400, -300)
      size = (10, 20)
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent leftamount
      color = $[0.694,-0.882,-0.882]
      letterHeight = 0.04
      pos = (-0.2, -0.2)
      startVal [time (s)] = 0.0
      text = 25
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    TextComponent rightamount
      color = $[0.694,-0.882,-0.882]
      letterHeight = 0.04
      pos = (0.2, -0.2)
      startVal [time (s)] = 0.0
      text = 50
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    CodeComponent choose
      Code Type = JS
      Begin JS Experiment:
        choose = function choose(choices) {
            var index = Math.floor(Math.random() * choices.length);
            return choices[index];
            }
    CodeComponent JScode
      Code Type = JS
      Begin JS Experiment:
        thisExp = psychoJS.experiment;
  Routine Feedback
    CodeComponent positionJS
      Code Type = JS
      Begin JS Routine:
        for (var stimulus, _pj_c = 0, _pj_a = [blue, green], _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            stimulus = _pj_a[_pj_c];
            if (response.isPressedIn(stimulus)) {
                px = stimulus.pos[0];
            }
        }
    CodeComponent feedback_code
      Code Type = Both
      Begin Experiment:
        msgIm = ''
        vol = ''
        total = 0
        msgIm_opacity = 0
      Begin JS Experiment:
        msgIm = "";
        vol = "";
        total = 0;
        msgIm_opacity = 0;
      Begin JS Routine:
        if ((corr === 1)) {
            msgIm = ("images/" + cash_corr);
            msgIm_opacity = 1;
            vol = 1;
            total = (total + gain);
        } else {
            msgIm = ("images/" + cash_corr);
            msgIm_opacity = 0;
            vol = 0;
            total = (total + 0);
        }
      Begin Routine:
        if corr == 1:
            msgIm ='images/' + cash_corr
            msgIm_opacity =1
            #msg=cash_corr
            vol=1
            total=total+gain
        else:
            msgIm ='images/' +cash_corr
            msgIm_opacity =0
            vol=0
            total=total+0
      End JS Routine:
        if ((trials.thisTrialN === 290)) {
            trials.finished = true;
        }
      End Routine:
        if (trials.thisTrialN) == 290:
            trials.finished = True
    SoundComponent fb_sound
      hamming = False
      sound [set every repeat] = $audio_corr
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 4
      syncScreenRefresh = False
      volume [set every repeat] = vol
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    ImageComponent fb_correct
      image [set every repeat] = $corrAns
      size = (0.30, 0.40)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 4
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    ImageComponent feedbackIm
      image [set every repeat] = $msgIm
      opacity [set every repeat] = msgIm_opacity
      size = (0.22, 0.24)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 4
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    TextComponent feedback_text
      color = $[0.694,-0.882,-0.882]
      disabled = True
      letterHeight [set every repeat] = cash_size
      startVal [time (s)] = 1
      stopVal [duration (s)] = 4
      text [set every repeat] = $msg
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    ImageComponent red_frame
      image = images/red_box.png
      pos [set every repeat] = (px, 0)
      size = (0.35, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent fb_blue
      image = images/blue_box.png
      pos [set every repeat] = (pb, 0)
      size = (0.30, 0.40)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent fb_green
      image = images/green_box.png
      pos [set every repeat] = (pg, 0)
      size = (0.30, 0.40)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    TextComponent fb_blue_reward
      color = $[0.694,-0.882,-0.882]
      letterHeight = 0.05
      pos [set every frame] = (pb, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $reward_blue
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    TextComponent fb_green_reward
      color = $[0.694,-0.882,-0.882]
      letterHeight = 0.05
      pos [set every frame] = (pg, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $reward_green
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    ImageComponent purple
      image = images/purple_box.png
      pos = (400, -250)
      size = (10, 20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      units = pix
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    ImageComponent gold
      image = images/gold_box.png
      pos = (600, -250)
      size = (10, 20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      units = pix
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    ImageComponent points
      image = images/red_box.png
      pos [set every frame] = (total/10-500, -250)
      size = (10, 20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      units = pix
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  Routine End
    TextComponent thank_you
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        This is the end of the experiment.
        Thank you for your time.
  Routine ITI_2
    TextComponent text
      color = $[0.694,-0.882,-0.882]
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ITI_s
      text = +
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  Routine trial
    TextComponent question_mark
      color = $[0.694,-0.882,-0.882]
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      text = ?
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    ImageComponent blue
      image = images/blue_box.png
      pos [set every repeat] = (pb, 0)
      size = (0.30, 0.40)
      startVal [time (s)] = 0
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    ImageComponent green
      image = images/green_box.png
      pos [set every repeat] = (pg, 0)
      size = (0.30, 0.40)
      startVal [time (s)] = 0
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    CodeComponent response_code
      Code Type = Both
      Before Experiment:
        # Begin Experiment
        #import random
        #condition = random.choice(('cued','uncued'))
      Before JS Experiment:
        //condition = choose(["cued", "uncued"]);
      Begin JS Routine:
        corr = 0;
        gain = 0;
        px = 0;
      Begin Routine:
        corr = 0
        gain = 0
        px = 0
      Each Frame:
        for stimulus in [blue, green]:
            if response.isPressedIn(stimulus):
                print(stimulus.image, corrAns, stimulus.image==corrAns, stimulus.pos, type(stimulus.image), type(corrAns))
                px=stimulus.pos[0]
                if stimulus.image == corrAns:
                    corr = 1
                    gain = corrAmount
                thisExp.addData('correct', corr)
                continueRoutine = False
      Each JS Frame:
        for (var stimulus, _pj_c = 0, _pj_a = [blue, green], _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            stimulus = _pj_a[_pj_c];
            if (response.isPressedIn(stimulus)) {
                px = stimulus.pos[0];
                var corrAnsMaybe = "images/" + stimulus.name + "_box.png";
                console.log(stimulus.name, corrAns, corrAnsMaybe, corrAnsMaybe === corrAns, pb, pg, px);
                if ((corrAnsMaybe === corrAns)) {
                    corr = 1;
                    gain = corrAmount;
                }
                thisExp.addData("correct", corr);
                continueRoutine = false;
            }
        }
    MouseComponent response
      clickable = blue, green
      forceEndRoutineOnPress = valid click
      saveMouseState = every frame
      startVal [time (s)] = 0
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    TextComponent blue_reward
      color = $[0.694,-0.882,-0.882]
      letterHeight = 0.05
      pos [set every repeat] = (pb, 0)
      startVal [time (s)] = 0.0
      text [set every repeat] = $reward_blue
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    TextComponent green_reward
      color = $[0.686,-0.875,-0.875]
      letterHeight = 0.05
      pos [set every repeat] = (pg, 0)
      startVal [time (s)] = 0.0
      text [set every repeat] = $reward_green
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    ImageComponent purple_marker
      image = images/purple_box.png
      pos = (400, -250)
      size = (10, 20)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent gold_marker
      image = images/gold_box.png
      pos = (600, -250)
      size = (10, 20)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent points_marker
      image = images/red_box.png
      pos [set every repeat] = (total/10-500, -250)
      size = (10, 20)
      startVal [time (s)] = 0.0
      units = pix
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Flow
  Routine Instructions
  LoopInitiator outerLoop loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('condition', 'cued.xlsx')]),
      OrderedDict([('condition', 'uncued.xlsx')])]
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $thisCond
      loopType = sequential
      nReps = 1
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      Routine trial
      Routine Feedback
      Routine ITI_2
    LoopTerminator trials
  LoopTerminator outerLoop
  Routine End
