PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  expName = trailMaking
  exportHTML = on Save
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Routines
  Routine trial
    MouseComponent trialMouse
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = every frame
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
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    CodeComponent targetCode
      Code Type = JS
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      Begin JS Experiment:
        trialTargets = [];
        trialTargetLabels = [];
        trialLines = [];
        loopCounter = 0;
      Begin JS Routine:
        loopCounter += 1;
        trialStep = 0;
        steps = [];

        trialTargets = [];
        trialTargetLabels = [];
        trialLines = [];

        // For creating unique labels
        // Class from https://stackoverflow.com/questions/12504042/what-is-a-method-that-can-be-used-to-increment-letters
        class StringIdGenerator {
          constructor(chars = 'ABCDEFGHIJKLMNOPQRSTUVWXYZ') {
            this._chars = chars;
            this._nextId = [0];
          }

          next() {
            const r = [];
            for (const char of this._nextId) {
              r.unshift(this._chars[char]);
            }
            this._increment();
            return r.join('');
          }

          _increment() {
            for (let i = 0; i < this._nextId.length; i++) {
              const val = ++this._nextId[i];
              if (val >= this._chars.length) {
                this._nextId[i] = 0;
              } else {
                return;
              }
            }
            this._nextId.push(0);
          }

          *[Symbol.iterator]() {
            while (true) {
              yield this.next();
            }
          }
        }

        const alphaID = new StringIdGenerator();

        // Improve on this algorithm
        allCoordinates = function() {
            var coordArray = [];
            var offset;
            var newX, newY;

            for ( var x = 0.4; x >= -0.4; x -= 0.06) {
                for ( var y = 0.4; y >= -0.4; y -=0.06 ) {

                  // set distance to move the target
                  offset = Math.random() * 2 * Math.PI;
                  newX = x + 0.005 * Math.cos(offset);
                  newY = y + 0.005 * Math.sin(offset);
                  coordArray.push([newX, newY]);
                }
            }
            return coordArray;
        }
        .call(this);

        util.shuffle(allCoordinates);

        // How many targets are needed?
        choiceCoordinates = allCoordinates.slice(0,10);

        // Make and label the targets
        for (var index in choiceCoordinates) {
            trialTargets.push(
                new visual.Polygon({
                        win: psychoJS.window,
                        name: "trialTarget" + index,
                        edges: 30,
                        size: [0.05, 0.05],
                        ori: 0,
                        pos: choiceCoordinates[index],
                        lineWidth: 1,
                        lineColor: new util.Color([1, 1, 1]),
                        lineColorSpace: "rgb",
                        fillColor: new util.Color([1, 1, 1]),
                        fillColorSpace: "rgb",
                        opacity: 0.25,
                        interpolate: true,
                    })
            );
            trialTargetLabels.push(
                new visual.TextStim({
                    win: psychoJS.window,
                    name: "label" + index,
                    text: -1,
                    font: 'Arial',
                    pos: choiceCoordinates[index], height: 0.03, ori: 0,
                    color: new util.Color('black'),  opacity: 1,
                    depth: -1.0
                  })
            );
            if (index % 2 == 0) {
                trialTargetLabels[index].text = parseInt(index, 10)/2 + 1;
            } else {
                trialTargetLabels[index].text = alphaID.next();
            }
        }

        makeLines = function() {
            for (var index = 0; index < (choiceCoordinates.length ); index++) {
                if ( index == 0 ) {
                    trialLines.push(
                        new visual.ShapeStim({
                            win: psychoJS.window,
                            vertices: [ (0,0), (0,0) ],
                            opacity: 0,
                        })
                    );
                } else {
                    trialLines.push(
                        new visual.ShapeStim({
                            win: psychoJS.window,
                            vertices: [ trialTargets[index-1].pos, trialTargets[index].pos ],
                            opacity: 0,
                        })
                    );
                }
            }
        }
        .call(this);

        trialTargets.forEach( thisComponent => thisComponent.setAutoDraw(true) );
        trialTargetLabels.forEach( thisComponent => thisComponent.setAutoDraw(true) );
        trialLines.forEach( thisComponent => thisComponent.setAutoDraw(true) );
      Each JS Frame:
        if ( trialStep < trialTargets.length ) {
            CursorTargetDistance = Math.sqrt(
                Math.pow( (trialCursor.pos[0] - trialTargets[trialStep].pos[0]), 2 ) + Math.pow( (trialCursor.pos[1] - trialTargets[trialStep].pos[1]), 2 )
            );

            if ( CursorTargetDistance < 0.05 ) {
                trialTargets[trialStep].opacity = 0;
                trialTargetLabels[trialStep].opacity = 0.25;
                trialLines[trialStep].opacity = 1;
                trialStep += 1;
            }
        } else {
            continueRoutine = false;
        }
      End JS Routine:
        trialTargets.forEach( thisComponent => thisComponent.setAutoDraw(false) );
        trialTargetLabels.forEach( thisComponent => thisComponent.setAutoDraw(false) );
        trialLines.forEach( thisComponent => thisComponent.setAutoDraw(false) );
    PolygonComponent trialCursor
      fillColor = $[1,1,1]
      nVertices = 180
      pos [set every frame] = (trialMouse.getPos()[0], trialMouse.getPos()[1])
      shape = regular polygon...
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
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    TextComponent text
      letterHeight = 0.1
      pos = (-0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $(loopCounter) + " of " + 5
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  Routine instructions
    TextComponent instr_text
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        Using the mouse, connect the targets in sequential order.

        Alternate between numbers and letters
        ex. 1, A, 2, B ...

        press 'space' to continue.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 5
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    Routine trial
  LoopTerminator trials
