PsychoPy2experiment version="2023.2.3"
Settings
  Data filename = u'data/sub-%s_task-%s' % (expInfo['participant'], expName)
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = black
  expName = two-armed-bandit
  keyboardBackend = ioHub
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Routines
  Routine stimuli
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    ImageComponent left
      image [set every repeat] = $stim_left_name
      pos = (-0.4, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent right
      image [set every repeat] = $stim_right_name
      pos = (0.4, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    KeyboardComponent key_resp
      allowedKeys = 'left', 'right'
      correctAns = $optimal_choice
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      store = first key
      storeCorrect = True
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    CodeComponent store_chosen_stim
      Code Type = Auto->JS
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      End Routine:
        if position_changed == 0:
            if key_resp.keys == 'left':
                thisExp.addData('chosen_stim_name', stim_0)
                thisExp.addData('chosen_stim_0', 1)
                thisExp.addData('chosen_stim_1', 0)

                if goal == 'win':
                    thisExp.addData('true_accuracy', 1)
                elif goal == 'avoidloss':
                    thisExp.addData('true_accuracy', 0)

            elif key_resp.keys == 'right':
                thisExp.addData('chosen_stim_name', stim_1)
                thisExp.addData('chosen_stim_0', 0)
                thisExp.addData('chosen_stim_1', 1)

                if goal == 'win':
                    thisExp.addData('true_accuracy', 0)
                elif goal == 'avoidloss':
                    thisExp.addData('true_accuracy', 1)

        elif position_changed == 1:
            if key_resp.keys == 'left':
                thisExp.addData('chosen_stim_name', stim_1)
                thisExp.addData('chosen_stim_0', 0)
                thisExp.addData('chosen_stim_1', 1)

                if goal == 'win':
                    thisExp.addData('true_accuracy', 0)
                elif goal == 'avoidloss':
                    thisExp.addData('true_accuracy', 1)

            elif key_resp.keys == 'right':
                thisExp.addData('chosen_stim_name', stim_0)
                thisExp.addData('chosen_stim_0', 1)
                thisExp.addData('chosen_stim_1', 0)

                if goal == 'win':
                    thisExp.addData('true_accuracy', 1)
                elif goal == 'avoidloss':
                    thisExp.addData('true_accuracy', 0)
  Routine stimuli_feedback
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp.keys == 'left':
            feedback_stim_right = stim_right_name
            feedback_stim_left = stim_left_name_feedback
        elif key_resp.keys == 'right':
            feedback_stim_right = stim_right_name_feedback
            feedback_stim_left = stim_left_name
        else:
            feedback_stim_right = stim_right_name
            feedback_stim_left = stim_left_name
    ImageComponent left_feedback
      image [set every repeat] = $feedback_stim_left
      pos = (-0.4, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent right_feedback
      image [set every repeat] = $feedback_stim_right
      pos = (0.4, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine fixation
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    PolygonComponent iti
      fillColor = $[1,1,1]
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine feedback
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    CodeComponent feedback_code
      Code Type = Auto->JS
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      Begin Routine:
        if not key_resp.keys:
            outcome = "missed"
            thisExp.addData('cumulativePts_self', ptsSelf)
            if condition != "practice":
                thisExp.addData('outcomeDescr', "missed")

        else:
            if key_resp.corr:
                if goal == "win":
                    if condition == "self":
                        outcome = "YOU\n\n+100 points"
                        ptsSelf += 100
                        thisExp.addData('cumulativePts_self', ptsSelf)
                        thisExp.addData('outcomeDescr', "self win")
                        thisExp.addData('outcome', 1)

                    elif condition == "practice":
                        outcome = "+100 points"

            else:
                if goal == "win":
                    if condition == "self":
                        outcome = "YOU\n\n0 points"
                        ptsSelf += 0
                        thisExp.addData('cumulativePts_self', ptsSelf)
                        thisExp.addData('outcomeDescr', "self avoid win")
                        thisExp.addData('outcome', 0)

                    elif condition == "practice":
                        outcome = "0 points"

        if condition == "practice":
            thisExp.addData('cumulativePts_self', 1000)
            thisExp.addData('outcomeDescr', "practice")
    TextComponent feedback_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $outcome
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  Routine ender
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        if (ptsSelf > 0):
            end_result = f"You won {ptsSelf} points for YOURSELF!"
        else:
            end_result = "You did not win any points."

        #from psychopy import logging
        #logging.log(level=logging.WARN, msg=(f'Participant wins: {points} points'))
        #logging.flush()
        #
    TextComponent end_heading
      color = yellow
      letterHeight = 0.075
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Experiment complete!
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    TextComponent end_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $end_result
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    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_4
      letterHeight = 0.08
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to exit.
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  Routine BlockInstruct
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    CodeComponent code_4
      Code Type = Auto->JS
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      Each Frame:
        if trial_num != 0:
            continueRoutine = False
    TextComponent BlockInstr_disp
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $block_instr_text
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  Routine intro
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    CodeComponent startup_code
      Code Type = Auto->JS
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      Begin Experiment:
        ptsSelf = 1000
        ptsSocial = 1000

        seed = int(expInfo['participant'])

        order_file = f"orders/sub-{expInfo['participant']}_stim-order.csv"

        #from psychopy import logging
        #logging.log(level=logging.EXP, msg=(f'Order loaded from file: {order_file}'))
        #logging.flush()
    KeyboardComponent key_resp_1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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    TextComponent intro_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        In this experiment you will see two slot machines appear on the screen and you need to select one of them.

        Based on your choices, you can win points. Points are converted into REAL MONEY at the end of the experiment.

        Press SPACE to continue.
    CodeComponent code_JS
      Code Type = JS
      Begin JS Experiment:
        thisExp=psychoJS.experiment;
  Routine instr1
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    TextComponent instr_1
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Some slot machines will give you points more or less often than others. Your job is to figure out which machine is the best to choose, and select it using your arrow keys.

        Press SPACE to continue.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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  Routine prac_instr
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    TextComponent read_prac
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Let’s try a few practice rounds.

        Sometimes you will play to win points. Other times, you will play to avoid losing points. The task will tell you which condition you are in.

        Press SPACE to begin the practice.
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instr2
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    TextComponent instr_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0
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      text:
        Respond using the LEFT and RIGHT arrow keys matching whichever side the machine you choose appears. Sometimes the machine might appear on the left while other times it might appear on the right.

        Try to respond as quickly and accurately as possible. You have about 2 seconds to make your choice.

        Press SPACE to continue.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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  Routine instr3
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    TextComponent instr_3
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        After each choice, you will see feedback.

        Sometimes you will win points, +100 points!
        Sometimes you will not win points, 0 points

        Press SPACE to continue.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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  Routine instr4
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    TextComponent instr_4
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Now you will play the task for real.

        You can win up to 3 dollars.

        Press SPACE to continue.
    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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  Routine exp_instr
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    TextComponent ready_exp
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Remember, your performance from now on will result in REAL MONETARY outcomes!

        You will receive any money you win.

        Press SPACE to begin the experiment.
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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Flow
  Routine intro
  Routine instr1
  Routine instr2
  Routine instr3
  Routine prac_instr
  LoopInitiator practice_round loopType="TrialHandler"
    conditionsFile = orders\prac_stim-order.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine BlockInstruct
    Routine fixation
    Routine stimuli
    Routine stimuli_feedback
    Routine fixation
    Routine feedback
  LoopTerminator practice_round
  Routine instr4
  Routine exp_instr
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $order_file
    loopType = sequential
    nReps = 1
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    Routine BlockInstruct
    Routine fixation
    Routine stimuli
    Routine stimuli_feedback
    Routine fixation
    Routine feedback
  LoopTerminator trials
  Routine ender
