PsychoPy2experiment version="2023.2.3"
Settings
  Data filename = u'data/sub-%s_task-%s' % (expInfo['participant'], expName)
  Experiment info = {'participant': '03'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = black
  expName = two-armed-bandit
  keyboardBackend = ioHub
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Routines
  Routine stimuli
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    ImageComponent left
      image [set every repeat] = $stim_left_name
      pos = (-0.4, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent right
      image [set every repeat] = $stim_right_name
      pos = (0.4, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    KeyboardComponent key_resp
      allowedKeys = 'left', 'right'
      correctAns = $optimal_choice
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      store = first key
      storeCorrect = True
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    CodeComponent store_chosen_stim
      Code Type = Auto->JS
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      End Routine:
        if position_changed == 0:
            if key_resp.keys == 'left':
                thisExp.addData('chosen_stim_name', stim_0)
                thisExp.addData('chosen_stim_0', 1)
                thisExp.addData('chosen_stim_1', 0)

                if goal == 'win':
                    thisExp.addData('true_accuracy', 1)
                elif goal == 'avoidloss':
                    thisExp.addData('true_accuracy', 0)

            elif key_resp.keys == 'right':
                thisExp.addData('chosen_stim_name', stim_1)
                thisExp.addData('chosen_stim_0', 0)
                thisExp.addData('chosen_stim_1', 1)

                if goal == 'win':
                    thisExp.addData('true_accuracy', 0)
                elif goal == 'avoidloss':
                    thisExp.addData('true_accuracy', 1)

        elif position_changed == 1:
            if key_resp.keys == 'left':
                thisExp.addData('chosen_stim_name', stim_1)
                thisExp.addData('chosen_stim_0', 0)
                thisExp.addData('chosen_stim_1', 1)

                if goal == 'win':
                    thisExp.addData('true_accuracy', 0)
                elif goal == 'avoidloss':
                    thisExp.addData('true_accuracy', 1)

            elif key_resp.keys == 'right':
                thisExp.addData('chosen_stim_name', stim_0)
                thisExp.addData('chosen_stim_0', 1)
                thisExp.addData('chosen_stim_1', 0)

                if goal == 'win':
                    thisExp.addData('true_accuracy', 1)
                elif goal == 'avoidloss':
                    thisExp.addData('true_accuracy', 0)
  Routine stimuli_feedback
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp.keys == 'left':
            feedback_stim_right = stim_right_name
            feedback_stim_left = stim_left_name_feedback
        elif key_resp.keys == 'right':
            feedback_stim_right = stim_right_name_feedback
            feedback_stim_left = stim_left_name
        else:
            feedback_stim_right = stim_right_name
            feedback_stim_left = stim_left_name
    ImageComponent left_feedback
      image [set every repeat] = $feedback_stim_left
      pos = (-0.4, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent right_feedback
      image [set every repeat] = $feedback_stim_right
      pos = (0.4, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine fixation
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    PolygonComponent iti
      fillColor = $[1,1,1]
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine feedback
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    CodeComponent feedback_code
      Code Type = Auto->JS
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      Begin Routine:
        if not key_resp.keys:
            outcome = "omitido"
            thisExp.addData('cumulativePts_self', ptsSelf)
            if condition != "practice":
                thisExp.addData('outcomeDescr', "missed")

        else:
            if key_resp.corr:
                if goal == "win":
                    if condition == "self":
                        outcome = "YOU\n\n+100 points"
                        ptsSelf += 100
                        thisExp.addData('cumulativePts_self', ptsSelf)
                        thisExp.addData('outcomeDescr', "self win")
                        thisExp.addData('outcome', 1)

                    elif condition == "practice":
                        outcome = "+100 points"

            else:
                if goal == "win":
                    if condition == "self":
                        outcome = "YOU\n\n0 points"
                        ptsSelf += 0
                        thisExp.addData('cumulativePts_self', ptsSelf)
                        thisExp.addData('outcomeDescr', "self avoid win")
                        thisExp.addData('outcome', 0)

                    elif condition == "practice":
                        outcome = "0 points"

        if condition == "practice":
            thisExp.addData('cumulativePts_self', 1000)
            thisExp.addData('outcomeDescr', "practice")
    TextComponent feedback_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $outcome
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  Routine ender
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        if (ptsSelf > 0):
            end_result = f"You won {ptsSelf} points for YOURSELF!"
        else:
            end_result = "You did not win any points."

        #from psychopy import logging
        #logging.log(level=logging.WARN, msg=(f'Participant wins: {points} points'))
        #logging.flush()
        #
    TextComponent end_heading
      color = yellow
      letterHeight = 0.075
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = ¡Experimento completo!
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    TextComponent end_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $end_result
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    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_4
      letterHeight = 0.08
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Presione ESPACIO para salir.
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  Routine BlockInstruct
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    CodeComponent code_4
      Code Type = Auto->JS
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      Each Frame:
        if trial_num != 0:
            continueRoutine = False
    TextComponent BlockInstr_disp
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $block_instr_text
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  Routine intro
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    CodeComponent startup_code
      Code Type = Auto->JS
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      Begin Experiment:
        ptsSelf = 1000
        ptsSocial = 1000

        seed = int(expInfo['participant'])

        order_file = f"orders/sub-{expInfo['participant']}_stim-order.csv"

        #from psychopy import logging
        #logging.log(level=logging.EXP, msg=(f'Order loaded from file: {order_file}'))
        #logging.flush()
    KeyboardComponent key_resp_1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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    TextComponent intro_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        En este experimento verás aparecer dos máquinas tragamonedas en la pantalla y deberás seleccionar una de ellas.

        Según tus elecciones, puedes ganar puntos. Los puntos se convierten en DINERO REAL al final del experimento.

        Presione espacio para continuar.
    CodeComponent code_JS
      Code Type = JS
      Begin JS Experiment:
        thisExp=psychoJS.experiment;
  Routine instr1
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    TextComponent instr_1
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Algunas máquinas tragamonedas te darán puntos con mayor o menor frecuencia que otras. Su trabajo es descubrir qué máquina es la mejor para elegir y seleccionarla usando las teclas de flecha.

        Presione ESPACIO para continuar.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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  Routine prac_instr
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    TextComponent read_prac
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Intentemos algunas rondas de práctica.

        A veces jugarás para ganar puntos. Otras veces jugarás para no perder puntos. El test le dirá en qué condición se encuentra.

        Presione ESPACIO para comenzar la práctica.
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instr2
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    TextComponent instr_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0
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      text:
        Responda usando las teclas de flecha IZQUIERDA y DERECHA que coincidan con el lado en el que aparezca la máquina que elija. A veces la máquina puede aparecer a la izquierda mientras que otras veces puede aparecer a la derecha.

        Intente responder lo más rápido y preciso posible. Tienes unos 2 segundos para hacer tu elección.

        Presione ESPACIO para continuar.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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  Routine instr3
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    TextComponent instr_3
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Después de cada elección, verá comentarios.

        A veces ganarás puntos, ¡+100 puntos!
        A veces no ganarás puntos, 0 puntos.

        Presione ESPACIO para continuar.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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  Routine instr4
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    TextComponent instr_4
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Ahora jugarás la tarea de verdad.



        Puedes ganar hasta 3 dólares.



        Presione ESPACIO para continuar.
    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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  Routine exp_instr
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    TextComponent ready_exp
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Recuerde, su desempeño a partir de ahora resultará en resultados MONETARIOS REALES.



        Recibirás el dinero que ganes.



        Presione ESPACIO para comenzar el experimento.
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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Flow
  Routine intro
  Routine instr1
  Routine instr2
  Routine instr3
  Routine prac_instr
  LoopInitiator practice_round loopType="TrialHandler"
    conditionsFile = orders/prac_stim-order.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('subject', 14), ('type', 0), ('condition', 'self'), ('goal', 'win'), ('block', 'practice'), ('block_num', 1), ('block_instr_text', 'Play to WIN points'), ('trial_num', 0), ('stim_0', 'stimuli/slotA_up.jpg'), ('stim_0_value', 1), ('stim_1', 'stimuli/slotB_up.jpg'), ('stim_1_value', 0), ('position_changed', 1), ('stim_left', 2), ('stim_right', 1), ('stim_left_name', 'stimuli/slotB_up.jpg'), ('stim_right_name', 'stimuli/slotA_up.jpg'), ('stim_left_name_feedback', 'stimuli/slotB_down.jpg'), ('stim_right_name_feedback', 'stimuli/slotA_down.jpg'), ('optimal_stim', 'stimuli/slotA_up.jp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,
      OrderedDict([('subject', 14), ('type', 0), ('condition', 'self'), ('goal', 'win'), ('block', 'practice'), ('block_num', 1), ('block_instr_text', 'Play to WIN points'), ('trial_num', 1), ('stim_0', 'stimuli/slotA_up.jpg'), ('stim_0_value', 1), ('stim_1', 'stimuli/slotB_up.jpg'), ('stim_1_value', 0), ('position_changed', 0), ('stim_left', 1), ('stim_right', 2), ('stim_left_name', 'stimuli/slotA_up.jpg'), ('stim_right_name', 'stimuli/slotB_up.jpg'), ('stim_left_name_feedback', 'stimuli/slotA_down.jpg'), ('stim_right_name_feedback', 'stimuli/slotB_down.jpg'), ('optimal_stim', 'stimuli/slotA_up.jpg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,
      OrderedDict([('subject', 14), ('type', 0), ('condition', 'self'), ('goal', 'win'), ('block', 'practice'), ('block_num', 1), ('block_instr_text', 'Play to WIN points'), ('trial_num', 2), ('stim_0', 'stimuli/slotA_up.jpg'), ('stim_0_value', 0), ('stim_1', 'stimuli/slotB_up.jpg'), ('stim_1_value', 1), ('position_changed', 1), ('stim_left', 2), ('stim_right', 1), ('stim_left_name', 'stimuli/slotB_up.jpg'), ('stim_right_name', 'stimuli/slotA_up.jpg'), ('stim_left_name_feedback', 'stimuli/slotB_down.jpg'), ('stim_right_name_feedback', 'stimuli/slotA_down.jpg'), ('optimal_stim', 'stimuli/slotB_up.jpg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,
      OrderedDict([('subject', 14), ('type', 0), ('condition', 'self'), ('goal', 'win'), ('block', 'practice'), ('block_num', 1), ('block_instr_text', 'Play to WIN points'), ('trial_num', 3), ('stim_0', 'stimuli/slotA_up.jpg'), ('stim_0_value', 1), ('stim_1', 'stimuli/slotB_up.jpg'), ('stim_1_value', 0), ('position_changed', 1), ('stim_left', 2), ('stim_right', 1), ('stim_left_name', 'stimuli/slotB_up.jpg'), ('stim_right_name', 'stimuli/slotA_up.jpg'), ('stim_left_name_feedback', 'stimuli/slotB_down.jpg'), ('stim_right_name_feedback', 'stimuli/slotA_down.jpg'), ('optimal_stim', 'stimuli/slotA_up.jpg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
    Routine BlockInstruct
    Routine fixation
    Routine stimuli
    Routine stimuli_feedback
    Routine fixation
    Routine feedback
  LoopTerminator practice_round
  Routine instr4
  Routine exp_instr
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $order_file
    loopType = sequential
    nReps = 1
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    Routine BlockInstruct
    Routine fixation
    Routine stimuli
    Routine stimuli_feedback
    Routine fixation
    Routine feedback
  LoopTerminator trials
  Routine ender
