PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['conditions/fluency-instructions-en.csv', 'stimuli/images/MicTitle.png', 'conditions/fluency-instructions-fr.csv', 'conditions/fluency-practices-en - Copie.csv', 'conditions/fluency-practices-en.csv', 'conditions/fluency-practices-en.xlsx', 'conditions/fluency-practices-fr - Copie.csv', 'conditions/fluency-practices-fr.csv', 'conditions/fluency-trials-en.csv', 'conditions/fluency-trials-fr.csv', 'conditions/fluency-trials-full.csv', 'stimuli/audio/animaux-fr.wav', 'stimuli/audio/A-fr.wav', 'stimuli/audio/F-fr.wav', 'stimuli/audio/L-fr.wav', 'stimuli/audio/S-fr.wav', 'stimuli/audio/instructions-category-fr.wav', 'stimuli/audio/instructions-letter-fr.wav', 'stimuli/audio/meubles-fr.wav', 'stimuli/audio/Z-fr.wav', 'stimuli/audio/clothing-en.wav', 'stimuli/audio/animals-en.wav', 'stimuli/audio/S-en.wav', 'stimuli/audio/A-en.wav', 'stimuli/audio/F-en.wav', 'stimuli/audio/furniture-en.wav', 'stimuli/audio/Z-en.wav', 'stimuli/audio/instructions-category-en.wav', 'stimuli/audio/instructions-letter-en.wav']
  Screen = 1
  Units = height
  Use version = 2022.2.5
  Window size (pixels) = [1536, 864]
  color = white
  expName = verbal-fluency
  keyboardBackend = ioHub
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Routines
  Routine lang
    CodeComponent codeLang
      Code Type = Both
      Before Experiment:
        # Before Experiment:
        def buttonSelector(selectedButton):
            selectedButton.fillColor = [-0.92, -0.24, -0.29]

        reminder = None
      Before JS Experiment:
        function buttonSelector(selectedButton) {
            selectedButton.fillColor = [-0.92, -0.24, -0.29];
        }
        var reminder = null;
      Begin JS Routine:
        endRoutineLang = false;
        clickTime = null;
      Begin Routine:
        endRoutineLang=False
        clickTime = None
      Each Frame:
        # Quand un bouton est cliqué
        if endRoutineLang and clickTime is None:
            clickTime = globalClock.getTime()  # Enregistrez le temps de clic

        if enButton.contains(mouse) & mouse.getPressed()[0]==1:
            buttonSelector(enButton)
        else:
            enButton.fillColor = 'whitesmoke'
            enButton.color = 'darkcyan'
            enButton.borderColor = 'darkcyan'
        enButton.draw()

        if frButton.contains(mouse) & mouse.getPressed()[0]==1:
            frButton.fillColor = 'darkcyan'
            frButton.color = 'black'
            frButton.borderColor = 'whitesmoke'
        else:
            frButton.fillColor = 'whitesmoke'
            frButton.color = 'darkcyan'
            frButton.borderColor = 'darkcyan'
        frButton.draw()


        # Vérifiez si 5 secondes se sont écoulées depuis le clic
        if clickTime is not None and globalClock.getTime() - clickTime >= 0.5:
            continueRoutine = False
      Each JS Frame:
        if ((endRoutineLang && (clickTime === null))) {
            clickTime = globalClock.getTime();
        }
        if (((enButton.contains(mouse) & mouse.getPressed()[0]) === 1)) {
            buttonSelector(enButton);
        } else {
            enButton.fillColor = "whitesmoke";
            enButton.color = "darkcyan";
            enButton.borderColor = "darkcyan";
        }
        enButton.draw();
        if (((frButton.contains(mouse) & mouse.getPressed()[0]) === 1)) {
            frButton.fillColor = "darkcyan";
            frButton.color = "black";
            frButton.borderColor = "whitesmoke";
        } else {
            frButton.fillColor = "whitesmoke";
            frButton.color = "darkcyan";
            frButton.borderColor = "darkcyan";
        }
        frButton.draw();
        if (((clickTime !== null) && ((globalClock.getTime() - clickTime) >= 0.5))) {
            continueRoutine = false;
        }
    ButtonComponent enButton
      bold = True
      borderColor = darkcyan
      borderWidth = 2
      color = darkcyan
      fillColor = whitesmoke
      forceEndRoutine = False
      letterHeight = 0.035
      pos = (0, 0.02)
      size = (0.3, 0.1)
      startVal [time (s)] = 0
      text = ENGLISH
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      callback:
        conditionsInstrPCSV = "conditions/fluency-instructions-en.csv"
        conditionsPracticeCSV = "conditions/fluency-practices-en.csv"
        conditionsCSV="conditions/fluency-trials-en.csv"
        beginButtonTxt="BEGIN"
        endTxt="Thank you. Please wait while the task completes."
        endWAV="stimuli/audio/end-en.wav"
        endRoutineLang=True
        instruLetterWAV="stimuli/audio/instructions-letter-en.wav"
        instruCatWAV="stimuli/audio/instructions-category-en.wav"
    ButtonComponent frButton
      bold = True
      borderColor = darkcyan
      borderWidth = 2
      color = darkcyan
      fillColor = whitesmoke
      forceEndRoutine = False
      letterHeight = 0.035
      pos = (0, -0.1)
      size = (0.3, 0.1)
      startVal [time (s)] = 0
      text = FRANÇAIS
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      callback:
        conditionsInstrPCSV = "conditions/fluency-instructions-fr.csv"
        conditionsPracticeCSV="conditions/fluency-practices-fr.csv"
        conditionsCSV="conditions/fluency-trials-fr.csv"
        beginButtonTxt="DÉBUTER"
        endTxt="Merci. Veuillez patientez pendant que la tâche se termine."
        endWAV="stimuli/audio/end-fr.wav"
        instruLetterWAV="stimuli/audio/instructions-letter-en.wav"
        instruCatWAV="stimuli/audio/instructions-category-en.wav"
        endRoutineLang=True
    MouseComponent mouse
      clickable = enButton, frButton
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine instructions
    CodeComponent codeInstr
      Code Type = Both
      Begin JS Routine:
        trialBlock += 1;
        textInstr.text = instructionTrial;
      Begin Routine:
        trialBlock += 1
        textInstr.text = instructionTrial
        win.color = 'black'
    PolygonComponent blackBackground
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (4, 4)
      startVal [time (s)] = 0.0
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    MouseComponent mouseInstr
      clickable = nextButtonRemind
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    KeyboardComponent keyInstr
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent textInstr
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    TextComponent textPressInstru
      letterHeight = 0.03
      pos = (0.575, -0.35)
      startVal [time (s)] = 5
      text [set every frame] = $press
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    ImageComponent nextButtonRemind
      image = stimuli/images/next.png
      pos = (0.75, -0.35)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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  Routine trial
    CodeComponent codeTrial
      Code Type = Both
      Before Experiment:
        trialBlock = 0
        showReminder = 1
      Before JS Experiment:
        var trialBlock = 0;
        var showReminder = 1;

        var thisOpacityTrial = 1;
        var opacityUpTrial = false
      Begin JS Routine:
        button_down = true
        console.log('thisIndex', trialLoop.thisIndex)
        if(trialLoop.thisIndex >= 3){
            txtTrial.height = 0.06;
        }
      Begin Routine:
        win.color = 'black'
        trialBlock += 1

        if trialBlock == 3:
            showReminder = 1
        else:
            showReminder = 0
      Each JS Frame:
        // Reset buttons if they are not pressed
        if (button_down && !(mouseTrial.getPressed()[0] === 1)){
            button_down = false
        }
        if (nextButtonTrial.contains(mouseTrial) && mouseTrial.getPressed()[0]==1 && !button_down){
            console.log('next')
            button_down = true;
            continueRoutine = false;
        }
        if (thisOpacityTrial > 0 && !opacityUpTrial){
            thisOpacityTrial -= 0.005
            if(thisOpacityTrial <= 0){
                opacityUpTrial = true
            }
        }
        if (opacityUpTrial){
            thisOpacityTrial += 0.005
            if(thisOpacityTrial >=1.5){
                opacityUpTrial = false
            }
        }
      End JS Routine:
        trialBlock += 1;
        if (trialBlock === 4) {
            showReminder = 1;
            console.log(trialBlock, showReminder)
        } else {
            showReminder = 0;
            console.log(trialBlock, showReminder)
        }
        console.log('trialBlock',trialBlock)
    MouseComponent mouseTrial
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    PolygonComponent blackBackgroundTrial
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (4, 4)
      startVal [time (s)] = 0.0
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    MicrophoneComponent micTrial
      channels = auto
      device = None
      maxSize = 24000
      outputType = wav
      sampleRate = DVD Audio (48kHz)
      speakTimes = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 66
      transcribe = False
      transcribeBackend = Google
      transcribeLang = en-US
      trimSilent = False
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    SoundComponent audioTrial
      sound [set every repeat] = $audioPrompt
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
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    TextComponent txtTrial
      color = $[-0.92, -0.24, -0.29]
      letterHeight = 0.1
      pos = (0, 0.35)
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $prompt
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    TextComponent txtRemind
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 32.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $reminderTrial
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    ImageComponent micStart
      image = stimuli/images/mic_start.png
      opacity [set every frame] = thisOpacityTrial
      size = (0.65, 0.65)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 60
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    ImageComponent micStop
      image = stimuli/images/mic_stop.png
      size = (0.65, 0.65)
      startVal [time (s)] = 63
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    ImageComponent nextButtonTrial
      image = stimuli/images/next.png
      pos = (0.75, -0.35)
      size = (0.1, 0.1)
      startVal [time (s)] = 63
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    TextComponent textNext
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 63
      text [set every repeat] = $nextStep
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  Routine practice
    CodeComponent codePractice
      Code Type = Both
      Before Experiment:
        scorePractice = 0
      Before JS Experiment:
        let wordsPractice = [];
        var scorePractice = 0
        var showInstruction = false;

        var thisOpacity = 1;
        var opacityUp = false
        var showHint = 1;
        var redo = false;
      Begin JS Routine:
        if(practiceLoop.thisIndex === 1){
            showHint = 0
            txtPractice.height = 0.06;
        }

        txtPractice.text = indicePractice;
        textHint.text = hint1
        button_down = true;

        /* BEGIN CUSTOM CODE */
        ;(async () => {
          const store = [];

          // Demande d'autorisation pour utiliser le microphone
          const stream = await navigator.mediaDevices.getUserMedia({ audio: true });
          const recorder = new MediaRecorder(stream);

          // Configuration de la reconnaissance vocale
          const speechRecognition = new (window.SpeechRecognition || window.webkitSpeechRecognition)();
          speechRecognition.lang = 'en-EN'; // Langue définie sur le français
          speechRecognition.continuous = true; // Mode continu

          // Gestion des résultats de la reconnaissance vocale
          speechRecognition.onresult = (event) => {
            if (event.results.length > 0) {
              const result = event.results[event.results.length - 1];
              if (result.isFinal) {
                wordsPractice.push(result[0].transcript)
                //console.log(result[0].transcript, typeof(result[0].transcript)); // Résultat de la transcription
              }
            }
          };

          // Gestion des événements de l'enregistreur
          recorder.onstart = () => {
            store.length = 0;
            speechRecognition.start(); // Démarrage de la reconnaissance vocale
          };

          recorder.ondataavailable = ({ data }) => {
            if (data.size > 0) {
              store.push(data);
            }
          };

          recorder.onstop = () => {
            speechRecognition.stop(); // Arrêt de la reconnaissance vocale
          };

          // Démarrage automatique de l'enregistrement
          recorder.start();
        })();
        /* END */
      Begin Routine:
        txtPractice.text = indicePractice
      Each Frame:
        #click next after instructions
        if beginButton.contains(mousePractice) & mousePractice.getPressed()[0]==1:
            continueRoutine=False
      Each JS Frame:
        if (button_down && !(mousePract.getPressed()[0] === 1)){
            button_down = false
        }
        if (beginButton.contains(mousePract) && mousePract.getPressed()[0] === 1 && !button_down) {
            continueRoutine = false;
        }
        if (infoButton.contains(mousePract) && mousePract.getPressed()[0]==1 && !button_down){
            showInstruction = true;
            textboxInstructions.text = instructionRemind
            textboxInstructions.opacity = 1;
            imgBackground.opacity = 1;
        }
        if (!infoButton.contains(mousePract)){
            textboxInstructions.opacity = 0;
            imgBackground.opacity = 0;
        }
        if(practiceLoop.thisIndex === 1){
            txtPractice.height = 0.06;
        }
        if(micStartP.status == FINISHED){
            textHint.text = hint2
        }
        if (thisOpacity > 0 && !opacityUp){
            thisOpacity -= 0.005
            if(thisOpacity <= 0){
                opacityUp = true
            }
        }
        if (opacityUp){
            thisOpacity += 0.005
            if(thisOpacity >=1.5){
                opacityUp = false
            }
        }
      End JS Routine:
        var allCorrect = true
        // Filtrer pour enlever les chaînes vides
        var wordsPracticeFinal = wordsPractice.filter(element => element !== "");
        wordsPracticeFinal = wordsPracticeFinal.map(element => element.replace(/\s/g, ''));
        wordsPracticeFinal.forEach(element => {
            console.log(element.charAt(0))
            if (element.charAt(0).toLowerCase() === 'z') {
                console.log(`${element} commence par Z.`);
            } else {
                console.log(`${element} ne commence pas par Z.`);
                allCorrect = false
            }
        });
        if (allCorrect){
            scorePractice +=1
            console.log(scorePractice)
        }
    MouseComponent mousePract
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0
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    TextboxComponent infoBox
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent txtPractice
      color = $[-0.92, -0.24, -0.29]
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 2.0
      text [set every frame] = $title
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    ImageComponent micStartP
      image = stimuli/images/mic_start.png
      opacity [set every frame] = thisOpacity
      size = (0.65, 0.65)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 17
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    ImageComponent micStopP
      image = stimuli/images/mic_stop.png
      size = (0.65, 0.65)
      startVal [time (s)] = 20
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    PolygonComponent imgBackground
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 1)
      startVal [condition] = showInstruction
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    TextboxComponent textboxInstructions
      bold = False
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.04
      padding = 0.1
      size = (1.3, 0.8)
      startVal [condition] = showInstruction
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    ImageComponent infoButton
      image = stimuli/images/info.png
      pos = (-0.75, -0.35)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent beginButton
      image = stimuli/images/next.png
      pos = (0.75, -0.35)
      size = (0.1, 0.1)
      startVal [time (s)] = 20
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    TextComponent textHint
      color = black
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 2
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  Routine instruPractice
    CodeComponent codeInstrP
      Code Type = Both
      Before Experiment:
        showInstructionP = False
      Before JS Experiment:
        showInstructionP = false;
        redo = false;
      Begin JS Routine:
        titleInstrP.text = title;

        button_down = true
        showInstructionP = false;
        redo = false;
      Begin Routine:
        txtInstrP.text = instructionVideo
        titleInstrP.text = title
      Each Frame:
        #click next after instructions
        if nextButton.contains(mouseInstrP) & mouseInstrP.getPressed()[0]==1:
            continueRoutine=False

        if (infoButtonInstrP.contains(mouseInstrP) & mouseInstrP.getPressed()[0]==1):
            showInstructionP = True;
            infoBoxP.text = instructionPractice
            infoBoxP.opacity = 1;
            backgroundInstrP.opacity = 1;

        if (not infoButton.contains(mouseInstrP)):
            infoBoxP.opacity = 0;
            backgroundInstrP.opacity = 0;
      Each JS Frame:
        // Reset buttons if they are not pressed
        if (button_down && !(mouseInstrP.getPressed()[0] === 1)){
            button_down = false
        }
        if (nextButton.contains(mouseInstrP) && mouseInstrP.getPressed()[0] === 1 && !button_down) {
            console.log('next button intru')
            button_down = true;
            continueRoutine = false;
        }
        if (((infoButtonInstrP.contains(mouseInstrP) & mouseInstrP.getPressed()[0]) === 1)) {
            showInstructionP = true;
            infoBoxP.text = instructionPractice;
            infoBoxP.opacity = 1;
            backgroundInstrP.opacity = 1;
        }
        if ((!infoButtonInstrP.contains(mouseInstrP))) {
            infoBoxP.opacity = 0;
            backgroundInstrP.opacity = 0;
        }
        if (replayButtonInstrP.contains(mouseInstrP) && mouseInstrP.getPressed()[0]==1 && !redo && !button_down){
            redo = true;
            button_down = true;
            continueRoutine = false;
        }
      End JS Routine:
        if(!redo){
            vfRedoInstru.finished = true;
        }
        setTimeout(() => {
            redo = false;
        }, 2000);
    MouseComponent mouseInstrP
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    ImageComponent imageAudio
      image = stimuli/images/imgAudio.png
      size = (0.8, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent titleInstrP
      color = $[-0.92, -0.24, -0.29]
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text [set every frame] = $title
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    ImageComponent nextButton
      image = stimuli/images/next.png
      pos = (0.75, -0.35)
      size = (0.1, 0.1)
      startVal [time (s)] = 5.0
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    ImageComponent replayButtonInstrP
      image = stimuli/images/replay.png
      pos = (0, -0.35)
      size = (0.1, 0.1)
      startVal [time (s)] = 5
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    PolygonComponent backgroundInstrP
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 1)
      startVal [condition] = showInstructionP
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    TextboxComponent infoBoxP
      bold = False
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.03
      padding = 0.1
      size = (1.3, 0.8)
      startVal [condition] = showInstructionP
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    ImageComponent infoButtonInstrP
      image = stimuli/images/info.png
      pos = (-0.75, -0.35)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    SoundComponent soundInstru
      sound [set every repeat] = $audioInstru
      startVal [time (s)] = 0.0
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  Routine endPractice
    CodeComponent codeEndPractice
      Code Type = Auto->JS
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      Begin Routine:
        textEndPractice.text = instruEndPractice
      Each Frame:
        if (infoEnd.contains(mouseEndPractice) & mouseEndPractice.getPressed()[0]==1):
            showInstructionEndP = True;
            infoBoxEnd.text = instructionRemind
            infoBoxEnd.opacity = 1;
            backgroundEndP.opacity = 1;

        if (not infoEnd.contains(mouseEndPractice)):
            infoBoxEnd.opacity = 0;
            backgroundEndP.opacity = 0;
    MouseComponent mouseEndPractice
      clickable = nextExButton
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    TextComponent textEndPractice
      color = $[-0.92, -0.24, -0.29]
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    ImageComponent nextExButton
      image = stimuli/images/next.png
      pos = (0.75, -0.35)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent backgroundEndP
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 1)
      startVal [condition] = showInstructionEndP
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    TextboxComponent infoBoxEnd
      bold = False
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.03
      padding = 0.1
      size = (1.3, 0.8)
      startVal [condition] = showInstructionEndP
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    ImageComponent infoEnd
      image = stimuli/images/info.png
      pos = (-0.75, -0.35)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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  Routine endTrial
    CodeComponent codeEndTrial
      Code Type = Auto->JS
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      Begin Routine:
        textEndTrial.text = endInstru
    PolygonComponent blackBackgroundEnd
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (4, 4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    TextComponent textEndTrial
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine title
    CodeComponent codeTitle
      Code Type = JS
    MouseComponent mouseTitle
      clickable = nextButtonTitle
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    TextComponent textTitle
      color = $[-0.92, -0.24, -0.29]
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text [set every frame] = $title
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    ImageComponent nextButtonTitle
      image = stimuli/images/next.png
      pos = (0.75, -0.35)
      size = (0.1, 0.1)
      startVal [time (s)] = 0
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    ImageComponent imageTitle
      image = stimuli/images/MicTitle.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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  Routine introPractice
    CodeComponent codeIntro
      Code Type = JS
      Begin JS Routine:
        showInstructionP = false;
        redo = false;
        playSound = true;
        button_down = true;
        txtIntro.text = indicePractice;
        console.log(soundIntro)
      Each JS Frame:
        // Reset buttons if they are not pressed
        if (button_down && !(mouseIntro.getPressed()[0] === 1)){
            button_down = false
        }
        if (infoButtonIntro.contains(mouseIntro) & mouseIntro.getPressed()[0]==1 && !button_down){
            button_down = true
            showInstruction = true;
            infoBoxIntro.text = instructionRemind
            infoBoxIntro.opacity = 1;
            backgroundIntro.opacity = 1;
        }
        if (!infoButtonIntro.contains(mouseIntro)){
            infoBoxIntro.opacity = 0;
            backgroundIntro.opacity = 0;
        }
        if (replayButtonIntro.contains(mouseIntro) && mouseIntro.getPressed()[0]==1 && !button_down){
            console.log('end practice replay', redoPractice)
            button_down = true
            continueRoutine = false;
        }
        if (nextButtonIntro.contains(mouseIntro) && mouseIntro.getPressed()[0]==1 && !button_down){
            redoPractice.thisN = 0
            redoPractice.setNReps(0)
            redoPractice.finished = true
            button_down = true;
            continueRoutine = false;
        }
        if(txtIntro.status == FINISHED){
            redoPractice.finished = true
            redoPractice.thisN = 0
            redoPractice.setNReps(0)
            continueRoutine = false
        }
    MouseComponent mouseIntro
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    TextComponent textIntro
      color = black
      letterHeight = 0.05
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      text [set every frame] = $hintPractice
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    TextComponent titleIntro
      color = $[-0.92, -0.24, -0.29]
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text [set every frame] = $title
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    ImageComponent nextButtonIntro
      image = stimuli/images/next.png
      pos = (0.75, -0.35)
      size = (0.1, 0.1)
      startVal [time (s)] = 5.0
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    ImageComponent replayButtonIntro
      image = stimuli/images/replay.png
      pos = (0, -0.35)
      size = (0.1, 0.1)
      startVal [time (s)] = 5
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    PolygonComponent backgroundIntro
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 1)
      startVal [condition] = showInstructionP
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    TextboxComponent infoBoxIntro
      bold = False
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.03
      padding = 0.1
      size = (1.3, 0.8)
      startVal [condition] = showInstructionP
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    ImageComponent infoButtonIntro
      image = stimuli/images/info.png
      pos = (-0.75, -0.35)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    SoundComponent soundIntro
      sound [set every repeat] = $audioInstruP
      startVal [condition] = playSound
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    TextComponent txtIntro
      color = $[-0.92, -0.24, -0.29]
      letterHeight = 0.1
      pos = (0, -0.15)
      startVal [time (s)] = 2.0
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Flow
  Routine lang
  LoopInitiator titleLoop loopType="TrialHandler"
    conditionsFile = $conditionsInstrPCSV
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine title
  LoopTerminator titleLoop
  LoopInitiator practiceLoop loopType="TrialHandler"
    conditionsFile = $conditionsPracticeCSV
    loopType = sequential
    nReps = 1
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    LoopInitiator vfRedoInstru loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 99
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      Routine instruPractice
    LoopTerminator vfRedoInstru
    LoopInitiator redoPractice loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 99
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      Routine introPractice
    LoopTerminator redoPractice
    Routine practice
  LoopTerminator practiceLoop
  LoopInitiator trialLoop loopType="TrialHandler"
    conditions = [OrderedDict([('instructionTrial', 'You have 1 minute to say all the words that are related to the letter/category you can think of out loud. \nPress the spacebar or click anywhere on the screen to start recording.')])]
    conditionsFile = $conditionsCSV
    loopType = sequential
    nReps = 1
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    Routine trial
  LoopTerminator trialLoop
  LoopInitiator endLoop loopType="TrialHandler"
    conditionsFile = $conditionsInstrPCSV
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('instructionPractice', 'INSTRUCTIONS\nWe would now like you to say out loud all the words that you can think of that begin with a letter of the alphabet. We will show you an example with the letter "Z", but you could be asked to say words starting with other letters. You cannot say names of people ("Zelda"), places ("Zurich"), or numbers ("zero"). Similar words with different endings ("zoo" and "zoos") will only count as 1 response. Compound words ("zookeeper") are acceptable.\n\nAfter you press the ARROW button, you will be given a letter and you can begin speaking once the gre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,
      OrderedDict([('instructionPractice', 'INSTRUCTIONS\nWe would now like you to say out loud all the words that you can think of that fit within a certain category. These words can start with any letter. We will show you an example with the category "office supplies", but you could be asked to say words within other categories. Similar words with different endings ("pen" and "pens") will only count as 1 response unless they refer to a different object ("pencil").\n\nAfter you press the ARROW button, you will be given a category and you can begin speaking once the green, flashing microphone appear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
    Routine endTrial
  LoopTerminator endLoop
